<?xml version='1.0'?>
<model name="full_E_cadherin_dynamics" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <!-- um-->
    <units name="um">
        <unit multiplier="0.000001" units="metre"/>
    </units>
    <!-- um^-2-->
    <units name="umn2">
        <unit exponent="-2" units="um"/>
    </units>
    <!-- s^-1*um^-2-->
    <units name="umn2ps">
        <unit exponent="-1" units="umn2"/>
        <unit exponent="-1" units="second"/>
    </units>
    <!-- s^-1-->
    <units name="psec">
        <unit exponent="-1" units="second"/>
    </units>
    <component name="environment">
        <variable name="t" public_interface="out" units="second"/>
    </component>
    <component name="membrane">
        <variable name="t" public_interface="in" units="second"/>
        <variable initial_value="1" name="jon" units="psec"/>
        <variable initial_value="0.09197" name="joff" units="psec"/>
        <!--0.25/e-->
        <variable initial_value="0.5" name="k1" units="umn2ps"/>
        <variable initial_value="1840" name="k_xp" units="psec"/>
        <variable initial_value="38000" name="k_x" units="psec"/>
        <variable initial_value="0.000127" name="k_sp" units="psec"/>
        <variable initial_value="0.31" name="k_s" units="psec"/>
        <variable initial_value="86" name="k_xs" units="psec"/>
        <variable initial_value="0.8" name="k_sx" units="psec"/>
        <variable initial_value="10" name="k2" units="psec"/>
        <!--        var k2: psec;-->
        <variable initial_value="0" name="k_cisp" units="psec"/>
        <variable initial_value="1e5" name="k_cis" units="psec"/>
        <variable initial_value="1e4" name="k_sa" units="psec"/>
        <variable initial_value="1" name="alpha" units="dimensionless"/>
        <variable initial_value="1" name="beta" units="dimensionless"/>
        <variable initial_value="0" name="k_cisp_m" units="dimensionless"/>
        <variable initial_value="0" name="k_cispstar_m" units="dimensionless"/>
        <variable initial_value="0" name="M1" units="umn2"/>
        <variable initial_value="0" name="M2" units="umn2"/>
        <variable initial_value="0" name="MM" units="umn2"/>
        <variable initial_value="0" name="X" units="umn2"/>
        <variable initial_value="0" name="S" units="umn2"/>
        <variable name="trans" units="umn2"/>
        <variable name="All" units="umn2"/>
        <variable initial_value="0" name="SS" units="umn2"/>
        <variable initial_value="0" name="Cis_star" units="umn2"/>
        <variable initial_value="0" name="Cis" units="umn2"/>
        <!--        k2 = 100{dimensionless}/(t+1{dimensionless})+1{dimensionless};
        k2 = t*0.5{dimensionless}+20{dimensionless};
        k2 = 20{dimensionless};-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>M1</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <apply>
                            <minus/>
                            <ci>k1</ci>
                        </apply>
                        <ci>M1</ci>
                        <ci>M2</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_xp</ci>
                        <ci>X</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_sp</ci>
                        <ci>S</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_cisp_m</ci>
                        <ci>Cis</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_cispstar_m</ci>
                        <ci>Cis_star</ci>
                    </apply>
                    <ci>jon</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>M2</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <apply>
                            <minus/>
                            <ci>k1</ci>
                        </apply>
                        <ci>M1</ci>
                        <ci>M2</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_xp</ci>
                        <ci>X</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_sp</ci>
                        <ci>S</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_cisp_m</ci>
                        <ci>Cis</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_cispstar_m</ci>
                        <ci>Cis_star</ci>
                    </apply>
                    <ci>jon</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>MM</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k1</ci>
                        <ci>M1</ci>
                        <ci>M2</ci>
                    </apply>
                    <apply>
                        <times/>
                        <apply>
                            <plus/>
                            <ci>k_x</ci>
                            <ci>k_s</ci>
                        </apply>
                        <ci>MM</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>X</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>k_x</ci>
                            <ci>MM</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_sx</ci>
                            <ci>S</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <apply>
                            <plus/>
                            <ci>k_xp</ci>
                            <ci>k_xs</ci>
                        </apply>
                        <ci>X</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>S</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <apply>
                                <plus/>
                                <apply>
                                    <times/>
                                    <ci>k_s</ci>
                                    <ci>MM</ci>
                                </apply>
                                <apply>
                                    <times/>
                                    <ci>k_xs</ci>
                                    <ci>X</ci>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <apply>
                                    <plus/>
                                    <ci>k_sp</ci>
                                    <ci>k_sx</ci>
                                </apply>
                                <ci>S</ci>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k2</ci>
                            <ci>S</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_cisp</ci>
                        <ci>Cis_star</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>alpha</ci>
                        <ci>k_cisp</ci>
                        <ci>Cis</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>trans</ci>
                <apply>
                    <plus/>
                    <ci>MM</ci>
                    <ci>X</ci>
                    <ci>S</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>SS</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k2</ci>
                        <ci>S</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>alpha</ci>
                        <ci>k_cis</ci>
                        <ci>SS</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Cis_star</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>alpha</ci>
                        <ci>k_cis</ci>
                        <ci>SS</ci>
                    </apply>
                    <apply>
                        <times/>
                        <apply>
                            <plus/>
                            <ci>k_cisp</ci>
                            <apply>
                                <times/>
                                <ci>beta</ci>
                                <ci>k_sa</ci>
                            </apply>
                            <ci>k_cispstar_m</ci>
                        </apply>
                        <ci>Cis_star</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Cis</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>beta</ci>
                            <ci>k_sa</ci>
                            <ci>Cis_star</ci>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <plus/>
                                <apply>
                                    <times/>
                                    <ci>alpha</ci>
                                    <ci>k_cisp</ci>
                                </apply>
                                <ci>k_cisp_m</ci>
                            </apply>
                            <ci>Cis</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>joff</ci>
                        <apply>
                            <minus/>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <ci>Cis</ci>
                                    <cn cellml:units="dimensionless">200</cn>
                                </apply>
                            </apply>
                            <cn cellml:units="dimensionless">1</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>All</ci>
                <apply>
                    <plus/>
                    <ci>M1</ci>
                    <ci>MM</ci>
                    <ci>X</ci>
                    <ci>S</ci>
                    <ci>SS</ci>
                    <ci>Cis_star</ci>
                    <ci>Cis</ci>
                </apply>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="environment" component_2="membrane"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
</model>
